PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = project
  keyboardBackend = ioHub
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Routines
  Routine trial
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = Car Crash Video.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextboxComponent resp_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (-0.15,0)
      size = (0.5,0.5)
      startVal [time (s)] = 5
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0,-0.15)
      startVal [time (s)] = 5
      text [set every repeat] = Click to Submit
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    MouseComponent mouse
      clickable = $submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 5
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    TextComponent kmph
      letterHeight = 0.05
      pos = (0.15,0)
      startVal [time (s)] = 5
      text [set every repeat] = km/h
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    TextComponent question
      letterHeight = 0.05
      pos = (0,0.15)
      startVal [time (s)] = 5
      text = What was the speed of the red car when it smashed the green car?
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Flow
  Routine trial
